'CR800 Series
'Created by Short Cut (3.0)

'Declare Variables and Units
Public BattV
Public PTemp_C
Public AirTC
Public RH

Units BattV=Volts
Units PTemp_C=Deg C
Units AirTC=Deg C
Units RH=%

'Define Data Tables
DataTable(Table1,True,-1)
	DataInterval(0,60,Min,10)
	Average(1,BattV,FP2,False)
	Average(1,PTemp_C,FP2,False)
	Average(1,AirTC,FP2,False)
	Sample(1,AirTC,FP2)
	Sample(1,RH,FP2)
EndTable

DataTable(Table2,True,-1)
	DataInterval(0,1440,Min,10)
	Minimum(1,BattV,FP2,False,False)
EndTable

'Main Program
BeginProg
	'Main Scan
	Scan(10,Sec,1,0)
		'Default Datalogger Battery Voltage measurement 'BattV'
		Battery(BattV)
		'Default Wiring Panel Temperature measurement 'PTemp_C'
		PanelTemp(PTemp_C,_50Hz)
		'HMP155 (panel switched power) Temperature & Relative Humidity Sensor measurements 'AirTC' and 'RH'
		PortSet(9,1)
		Delay(0,5,Sec)
		VoltSE(AirTC,1,mV2500,1,0,0,_50Hz,0.14,-80)
		VoltSE(RH,1,mV2500,2,0,0,_50Hz,0.1,0)
		PortSet(9,0)
		If RH>100 And RH<108 Then RH=100
		'Call Data Tables and Store Data
		CallTable(Table1)
		CallTable(Table2)
	NextScan
EndProg
